! ==================== !
! ==================== !
Compute_Model_Based_Data
/RESULT_NAME=RT_ANKLE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=LT_ANKLE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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! /NEGATEY=TRUE
! /NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_KNEE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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! /NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_KNEE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=PELVIS_ANGLE
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
! /REFERENCE_SEGMENT=LAB
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
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/AXIS3=X
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;

Compute_Model_Based_Data
/RESULT_NAME=TORSO_ANGLE
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTA
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/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
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/AXIS3=X
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;

Compute_Model_Based_Data
/RESULT_NAME=TORSO_PELVIS_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTA
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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! /AXIS1=Z
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! /AXIS3=X
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=
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/AXIS1=Z
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ELBOW_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFA
/REFERENCE_SEGMENT=RAR
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ELBOW_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFA
/REFERENCE_SEGMENT=LAR
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_WRIST_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RHA
/REFERENCE_SEGMENT=RFA
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_WRIST_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LHA
/REFERENCE_SEGMENT=LFA
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ANKLE_VIRTUAL_LAB_ANGLE
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFT
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/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ANKLE_VIRTUAL_LAB_ANGLE
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT
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/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_KNEE_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=RTH
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_KNEE_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=LTH
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RTH
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=LTH
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;

Compute_Model_Based_Data
/RESULT_NAME=PELVIS_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RPV
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Compute_Model_Based_Data
/RESULT_NAME=TORSO_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTA
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=TORSO_PELVIS_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTA
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=RAR
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LAR
/REFERENCE_SEGMENT=RTA
/RESOLUTION_COORDINATE_SYSTEM=LAR
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ELBOW_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RFA
/REFERENCE_SEGMENT=RAR
/RESOLUTION_COORDINATE_SYSTEM=RAR
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ELBOW_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LFA
/REFERENCE_SEGMENT=LAR
/RESOLUTION_COORDINATE_SYSTEM=LAR
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_WRIST_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RHA
/REFERENCE_SEGMENT=RFA
/RESOLUTION_COORDINATE_SYSTEM=RFA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_WRIST_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LHA
/REFERENCE_SEGMENT=LFA
/RESOLUTION_COORDINATE_SYSTEM=LFA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_GLOBAL_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RAR
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=RAR
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_GLOBAL_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LAR
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=LAR
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HAND_GLOBAL_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RHA
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=RHA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HAND_GLOBAL_ANGULAR_VELOCITY
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LHA
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=LHA
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;

! !!!!!!!!!!!!!!!!!!!!!!!!
! Joint Forces
! !!!!!!!!!!!!!!!!!!!!!!!!

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_RTA_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_LAR_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LAR
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_RTA_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_RAR_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RAR
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ELBOW_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LFA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LFA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ELBOW_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RFA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RFA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_WRIST_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LHA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LFA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_WRIST_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RHA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RFA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_LTH_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_RPV_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_RTH_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_RPV_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_KNEE_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_KNEE_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ANKLE_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ANKLE_FORCE
/FUNCTION=JOINT_FORCE
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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;

! !!!!!!!!!!!!!!!!!!!!!!!!
! Joint Moments
! !!!!!!!!!!!!!!!!!!!!!!!!

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_RTA_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_SHOULDER_LAR_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LAR
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_RTA_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTA
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_SHOULDER_RAR_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RAR
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RAR
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ELBOW_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LFA
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ELBOW_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RFA
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_WRIST_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LHA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LFA
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_WRIST_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RHA
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RFA
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_LTH_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_HIP_RPV_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_RTH_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_HIP_RPV_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_KNEE_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_KNEE_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=LT_ANKLE_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
/USE_CARDAN_SEQUENCE=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=RT_ANKLE_MMT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
/USE_CARDAN_SEQUENCE=TRUE
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;

First_Derivative
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=Model
/SIGNAL_NAMES=CenterOfMass
/RESULT_TYPES=LINK_MODEL_BASED
! /RESULT_FOLDERS=PROCESSED
/RESULT_NAME=_VELO
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
;

! ========= !
! NEW STUFF
! ========= !

! i cant get v3d to loop through and append _MAG as suffix so
! they're listed out individually for now
Signal_Magnitude
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=LFA
/SIGNAL_NAMES=DistEndVel
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/RESULT_NAME=LT_WRIST_GLOBAL_LINEAR_VELOCITY_MAG
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;

Signal_Magnitude
/SIGNAL_TYPES=KINETIC_KINEMATIC
/SIGNAL_FOLDER=RFA
/SIGNAL_NAMES=DistEndVel
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/RESULT_NAME=RT_WRIST_GLOBAL_LINEAR_VELOCITY_MAG
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;

Signal_Magnitude
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=TORSO_ANGULAR_VELOCITY
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/RESULT_NAME=TORSO_ANGULAR_VELOCITY_MAG
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=_MAG
;

Signal_Magnitude
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=PELVIS_ANGULAR_VELOCITY
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/RESULT_NAME=PELVIS_ANGULAR_VELOCITY_MAG
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;

Signal_Magnitude
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=RT_SHOULDER_GLOBAL_ANGULAR_VELOCITY
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/RESULT_NAME=RT_SHOULDER_GLOBAL_ANGULAR_VELOCITY_MAG
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;

Signal_Magnitude
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=LT_SHOULDER_GLOBAL_ANGULAR_VELOCITY
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/RESULT_NAME=LT_SHOULDER_GLOBAL_ANGULAR_VELOCITY_MAG
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;

! ============ !
! ENERGY STUFF
! ============ !

! =========================================================================================================== !
! get_energetics.v3s
! visual3D script to estimate energy flow through lower extremities, RTA, & upper extremities during pitching
! adapted from Robertson & Winter (1980):
!  Mechanical energy generation, absorption, and trasfer amongst segments during walking
! author: Kyle Wasserberger
! last updated: 2021-08-12
! =========================================================================================================== !

! ============ !
! LEFT HUMERUS !
! ============ !

! left humerus proximal joint force power
 ! rate of energy flow from thorax to humerus via the joint force
 ! at the shoulder (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LAR::ProxEndForce,KINETIC_KINEMATIC::LAR::ProxEndVel)
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! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_TYPES=DERIVED
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/RESULT_NAME=LAR_PROX_JFP
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
;

! left humerus proximal segment torque power
 ! rate of energy flow from thorax to humerus via the joint torque
 ! at the shoulder (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LAR::ProxEndTorque,KINETIC_KINEMATIC::LAR::AngVel)
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/RESULT_NAME=LAR_PROX_STP
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;

! left humerus distal joint force power
 ! rate of energy flow from forearm to humerus via joint force
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LFA::ProxEndForce,KINETIC_KINEMATIC::LAR::DistEndVel)
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/RESULT_NAME=LAR_DIST_JFP
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;

! left humerus distal joint force power
 ! rate of energy flow from forearm to humerus via joint torque
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LFA::ProxEndTorque,KINETIC_KINEMATIC::LAR::AngVel)
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/RESULT_NAME=LAR_DIST_STP
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;

! left humerus proximal segment power
 ! net rate of energy flow from thorax to humerus at the shoulder
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LAR_PROX_JFP+DERIVED::PROCESSED::LAR_PROX_STP
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/RESULT_NAME=LAR_PROX_SP
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;

! left humerus distal segment power
 ! net rate of energy flow forearm to humerus at the elbow
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LAR_DIST_JFP+DERIVED::PROCESSED::LAR_DIST_STP
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/RESULT_NAME=LAR_DIST_SP
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;

! left humerus segment power
 ! overall rate of energy flow entering/leaving the humerus
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LAR_PROX_SP+DERIVED::PROCESSED::LAR_DIST_SP
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/RESULT_NAME=LAR_NET_SP
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;

! ============= !
! RIGHT HUMERUS !
! ============= !

! right humerus proximal segment torque power
 ! rate of energy flow from thorax to humerus via the joint force
 ! at the shoulder (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RAR::ProxEndForce,KINETIC_KINEMATIC::RAR::ProxEndVel)
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! /RESURT_TYPES=DERIVED
! /RESURT_FOLDERS=PROCESSED
/RESULT_NAME=RAR_PROX_JFP
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;

! right humerus proximal segment torque power
 ! rate of energy flow from thorax to humerus via the joint torque
 ! at the shoulder (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RAR::ProxEndTorque,KINETIC_KINEMATIC::RAR::AngVel)
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/RESULT_NAME=RAR_PROX_STP
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;

! right humerus distal joint force power
 ! rate of energy flow from forearm to humerus via joint force
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RFA::ProxEndForce,KINETIC_KINEMATIC::RAR::DistEndVel)
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/RESULT_NAME=RAR_DIST_JFP
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;

! right humerus distal joint force power
 ! rate of energy flow from forearm to humerus via joint torque
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RFA::ProxEndTorque,KINETIC_KINEMATIC::RAR::AngVel)
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/RESULT_NAME=RAR_DIST_STP
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;

! right humerus proximal segment power
 ! net rate of energy flow from thorax to humerus at the shoulder
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RAR_PROX_JFP+DERIVED::PROCESSED::RAR_PROX_STP
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/RESULT_NAME=RAR_PROX_SP
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;

! right humerus distal segment power
 ! net rate of energy flow from forearm to humerus at the elbow
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RAR_DIST_JFP+DERIVED::PROCESSED::RAR_DIST_STP
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/RESULT_NAME=RAR_DIST_SP
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;

! right humerus segment power
 ! overall rate of energy flow entering/leaving the humerus
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RAR_PROX_SP+DERIVED::PROCESSED::RAR_DIST_SP
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/RESULT_NAME=RAR_NET_SP
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;

! ============ !
! LEFT FOREARM !
! ============ !

! left forearm proximal segment torque power
 ! rate of energy flow from humerus to forearm via the joint force
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LFA::ProxEndForce,KINETIC_KINEMATIC::LFA::ProxEndVel)
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/RESULT_NAME=LFA_PROX_JFP
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;

! left forearm proximal segment torque power
 ! rate of energy flow from humerus to forearm via the joint torque
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LFA::ProxEndTorque,KINETIC_KINEMATIC::LFA::AngVel)
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/RESULT_NAME=LFA_PROX_STP
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;

! left forearm distal joint force power
 ! rate of energy flow from hand to forearm via joint force
 ! at the wrist (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LHA::ProxEndForce,KINETIC_KINEMATIC::LFA::DistEndVel)
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/RESULT_NAME=LFA_DIST_JFP
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;

! left forearm distal joint force power
 ! rate of energy flow from hand to forearm via joint torque
 ! at the wrist (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LHA::ProxEndTorque,KINETIC_KINEMATIC::LFA::AngVel)
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/RESULT_NAME=LFA_DIST_STP
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;

! left forearm proximal segment power
 ! net rate of energy flow from humerus to forearm at the elbow
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LFA_PROX_JFP+DERIVED::PROCESSED::LFA_PROX_STP
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/RESULT_NAME=LFA_PROX_SP
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;

! left forearm distal segment power
 ! net rate of energy flow from hand to forearm at the wrist
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LFA_DIST_JFP+DERIVED::PROCESSED::LFA_DIST_STP
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/RESULT_NAME=LFA_DIST_SP
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;

! left forearm net segment power
 ! overall rate of energy flow entering/leaving the forearm
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LFA_PROX_SP+DERIVED::PROCESSED::LFA_DIST_SP
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/RESULT_NAME=LFA_NET_SP
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;

! ============= !
! RIGHT FOREARM !
! ============= !

! right forearm proximal segment torque power
 ! rate of energy flow from humerus to forearm via the joint force
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RFA::ProxEndForce,KINETIC_KINEMATIC::RFA::ProxEndVel)
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/RESULT_NAME=RFA_PROX_JFP
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;

! right forearm proximal segment torque power
 ! rate of energy flow from humerus to forearm via the joint torque
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RFA::ProxEndTorque,KINETIC_KINEMATIC::RFA::AngVel)
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/RESULT_NAME=RFA_PROX_STP
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;

! right forearm distal joint force power
 ! rate of energy flow from hand to forearm via joint force
 ! at the wrist (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RHA::ProxEndForce,KINETIC_KINEMATIC::RFA::DistEndVel)
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/RESULT_NAME=RFA_DIST_JFP
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;

! right forearm distal joint force power
 ! rate of energy flow from hand to forearm via joint torque
 ! at the wrist (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RHA::ProxEndTorque,KINETIC_KINEMATIC::RFA::AngVel)
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/RESULT_NAME=RFA_DIST_STP
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;

! right forearm proximal segment power
 ! net rate of energy flow from humerus to forearm at the elbow
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RFA_PROX_JFP+DERIVED::PROCESSED::RFA_PROX_STP
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/RESULT_NAME=RFA_PROX_SP
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;

! right forearm distal segment power
 ! net rate of energy flow from hand to forearm at the wrist
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RFA_DIST_JFP+DERIVED::PROCESSED::RFA_DIST_STP
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/RESULT_NAME=RFA_DIST_SP
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;

! right forearm net segment power
 ! overall rate of energy flow entering/leaving the forearm
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RFA_PROX_SP+DERIVED::PROCESSED::RFA_DIST_SP
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/RESULT_NAME=RFA_NET_SP
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;

! ========== !
! LEFT SHANK !
! ========== !

! left shank proximal joint force power
 ! rate of energy flow from foot to shank via the joint force
 ! at the ankle (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LFT::ProxEndForce,KINETIC_KINEMATIC::LSK::DistEndVel)
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/RESULT_NAME=LSK_PROX_JFP
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;

! left shank proximal segment torque power
 ! rate of energy flow from foot to shank via the joint torque
 ! at the ankle (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LFT::ProxEndTorque,KINETIC_KINEMATIC::LSK::AngVel)
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/RESULT_NAME=LSK_PROX_STP
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;

! left shank distal joint force power
 ! rate of energy flow from thigh to shank via joint force
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LSK::ProxEndForce,KINETIC_KINEMATIC::LSK::ProxEndVel)
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/RESULT_NAME=LSK_DIST_JFP
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;

! left shank distal segment torque power
 ! rate of energy flow from thigh to shank via joint torque
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LSK::ProxEndTorque,KINETIC_KINEMATIC::LSK::AngVel)
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/RESULT_NAME=LSK_DIST_STP
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;

! left shank proximal segment power
 ! net rate of energy flow from foot to shank at the ankle
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LSK_PROX_JFP+DERIVED::PROCESSED::LSK_PROX_STP
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/RESULT_NAME=LSK_PROX_SP
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;

! left shank distal segment power
 ! net rate of energy flow from thigh to shank at the knee
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LSK_DIST_JFP+DERIVED::PROCESSED::LSK_DIST_STP
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/RESULT_NAME=LSK_DIST_SP
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;

! left shank net segment power
 ! overall rate of energy flow entering/leaving the shank
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LSK_PROX_SP+DERIVED::PROCESSED::LSK_DIST_SP
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/RESULT_NAME=LSK_NET_SP
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;

! =========== !
! RIGHT SHANK !
! =========== !

! right shank proximal joint force power
 ! rate of energy flow from foot to shank via the joint force
 ! at the ankle (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RFT::ProxEndForce,KINETIC_KINEMATIC::RSK::DistEndVel)
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/RESULT_NAME=RSK_PROX_JFP
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;

! right shank proximal segment torque power
 ! rate of energy flow from foot to shank via the joint torque
 ! at the ankle (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RFT::ProxEndTorque,KINETIC_KINEMATIC::RSK::AngVel)
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/RESULT_NAME=RSK_PROX_STP
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;

! right shank distal joint force power
 ! rate of energy flow from thigh to shank via joint force
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RSK::ProxEndForce,KINETIC_KINEMATIC::RSK::ProxEndVel)
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/RESULT_NAME=RSK_DIST_JFP
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;

! right shank distal segment torque power
 ! rate of energy flow from thigh to shank via joint torque
 ! at the elbow (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RSK::ProxEndTorque,KINETIC_KINEMATIC::RSK::AngVel)
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/RESULT_NAME=RSK_DIST_STP
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;

! right shank proximal segment power
 ! net rate of energy flow from foot to shank at the ankle
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RSK_PROX_JFP+DERIVED::PROCESSED::RSK_PROX_STP
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/RESULT_NAME=RSK_PROX_SP
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;

! right shank distal segment power
 ! net rate of energy flow from thigh to shank at the knee
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RSK_DIST_JFP+DERIVED::PROCESSED::RSK_DIST_STP
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/RESULT_NAME=RSK_DIST_SP
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;

! right shank net segment power
 ! overall rate of energy flow entering/leaving the shank
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RSK_PROX_SP+DERIVED::PROCESSED::RSK_DIST_SP
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/RESULT_NAME=RSK_NET_SP
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;

! ========== !
! LEFT THIGH !
! ========== !

! left thigh proximal joint force power
 ! rate of energy flow from shank to thigh via the joint force
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LSK::ProxEndForce,KINETIC_KINEMATIC::LTH::DistEndVel)
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/RESULT_NAME=LTH_PROX_JFP
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;

! left thigh proximal segment torque power
 ! rate of energy flow from shank to thigh via the joint torque
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LSK::ProxEndTorque,KINETIC_KINEMATIC::LTH::AngVel)
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/RESULT_NAME=LTH_PROX_STP
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;

! left thigh distal joint force power
 ! rate of energy flow from thigh to RPVis via joint force
 ! at the hip (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LTH::ProxEndForce,KINETIC_KINEMATIC::LTH::ProxEndVel)
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/RESULT_NAME=LTH_DIST_JFP
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;

! left thigh distal segment torque power
 ! rate of energy flow from thigh to thigh via joint torque
 ! at the hip (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::LTH::ProxEndTorque,KINETIC_KINEMATIC::LTH::AngVel)
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/RESULT_NAME=LTH_DIST_STP
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;

! left thigh proximal segment power
 ! net rate of energy flow from shank to thigh at the knee
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LTH_PROX_JFP+DERIVED::PROCESSED::LTH_PROX_STP
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/RESULT_NAME=LTH_PROX_SP
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;

! left thigh distal segment power
 ! net rate of energy flow from thigh to thigh at the hip
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LTH_DIST_JFP+DERIVED::PROCESSED::LTH_DIST_STP
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/RESULT_NAME=LTH_DIST_SP
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;

! left thigh net segment power
 ! overall rate of energy flow entering/leaving the thigh
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::LTH_PROX_SP+DERIVED::PROCESSED::LTH_DIST_SP
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/RESULT_NAME=LTH_NET_SP
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;

! =========== !
! RIGHT THIGH !
! =========== !

! right thigh proximal joint force power
 ! rate of energy flow from shank to thigh via the joint force
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RSK::ProxEndForce,KINETIC_KINEMATIC::RTH::DistEndVel)
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/RESULT_NAME=RTH_PROX_JFP
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;

! right thigh proximal segment torque power
 ! rate of energy flow from shank to thigh via the joint torque
 ! at the knee (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RSK::ProxEndTorque,KINETIC_KINEMATIC::RTH::AngVel)
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/RESULT_NAME=RTH_PROX_STP
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;

! right thigh distal joint force power
 ! rate of energy flow from thigh to RPVis via joint force
 ! at the hip (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RTH::ProxEndForce,KINETIC_KINEMATIC::RTH::ProxEndVel)
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/RESULT_NAME=RTH_DIST_JFP
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;

! right thigh distal segment torque power
 ! rate of energy flow from thigh to thigh via joint torque
 ! at the hip (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RTH::ProxEndTorque,KINETIC_KINEMATIC::RTH::AngVel)
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/RESULT_NAME=RTH_DIST_STP
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;

! right thigh proximal segment power
 ! net rate of energy flow from shank to thigh at the knee
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTH_PROX_JFP+DERIVED::PROCESSED::RTH_PROX_STP
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/RESULT_NAME=RTH_PROX_SP
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;

! right thigh distal segment power
 ! net rate of energy flow from thigh to thigh at the hip
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTH_DIST_JFP+DERIVED::PROCESSED::RTH_DIST_STP
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/RESULT_NAME=RTH_DIST_SP
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;

! right thigh net segment power
 ! overall rate of energy flow entering/leaving the thigh
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTH_PROX_SP+DERIVED::PROCESSED::RTH_DIST_SP
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/RESULT_NAME=RTH_NET_SP
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;

! ====== !
! RPVIS !
! ====== !

! RPVis proximal joint force power
 ! rate of energy flow from thigh to RPVis via the joint force
 ! at the hip (left) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LTH::ProxEndForce,KINETIC_KINEMATIC::LTH::ProxEndVel)
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/RESULT_NAME=RPV_LHIP_JFP
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;

! RPVis proximal joint force power
 ! rate of energy flow from thigh to RPVis via the joint force
 ! at the hip (right) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RTH::ProxEndForce,KINETIC_KINEMATIC::RTH::ProxEndVel)
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/RESULT_NAME=RPV_RHIP_JFP
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;

! RPVis distal joint force power
 ! rate of energy flow from RTA to RPVis via the joint force
 ! at the RPVis/RTA junction (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RPV::ProxEndForce,KINETIC_KINEMATIC::RPV::ProxEndVel)
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/RESULT_NAME=RPV_RTA_JFP
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;

! RPVis proximal segment torque power
 ! rate of energy flow from thigh to RPVis via the joint torque
 ! at the hip (left) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LTH::ProxEndTorque,KINETIC_KINEMATIC::RPV::AngVel)
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/RESULT_NAME=RPV_LHIP_STP
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;

! RPVis proximal segment torque power
 ! rate of energy flow from thigh to RPVis via the joint torque
 ! at the hip (right) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RTH::ProxEndTorque,KINETIC_KINEMATIC::RPV::AngVel)
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/RESULT_NAME=RPV_RHIP_STP
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;

! RPVis distal segment torque power
 ! rate of energy flow from RTA to RPVis via the joint torque
 ! at the RPVis/RTA junction (Watts)
Evaluate_Expression
/EXPRESSION=dot(KINETIC_KINEMATIC::RPV::ProxEndTorque,KINETIC_KINEMATIC::RPV::AngVel)
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/RESULT_NAME=RPV_RTA_STP
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;

! RPVis proximal segment power
 ! net rate of energy flow from thigh to RPVis at the hip (left) (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RPV_LHIP_JFP+DERIVED::PROCESSED::RPV_LHIP_STP
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/RESULT_NAME=RPV_LHIP_SP
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;

! RPVis proximal segment power
 ! net rate of energy flow from thigh to RPVis at the hip (right) (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RPV_RHIP_JFP+DERIVED::PROCESSED::RPV_RHIP_STP
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/RESULT_NAME=RPV_RHIP_SP
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;

! RPVis distal segment power
 ! net rate of energy flow from RTA to RPVis at the RTA/RPVis junction (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RPV_RTA_JFP+DERIVED::PROCESSED::RPV_RTA_STP
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/RESULT_NAME=RPV_RTA_SP
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;

! RPVis segment power
 ! net rate of energy flow to/from the RPVis (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RPV_LHIP_SP+DERIVED::PROCESSED::RPV_RHIP_SP+DERIVED::PROCESSED::RPV_RTA_SP
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/RESULT_NAME=RPV_NET_SP
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;

! ============== !
! RTA (TSPINE) !
! ============== !

! RTA proximal joint force power
 ! rate of energy flow from RPVis to RTA via the joint force
 ! at the RPVis/RTA junction (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RTA::ProxEndForce,KINETIC_KINEMATIC::RTA::ProxEndVel)
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/RESULT_NAME=RTA_PROX_JFP
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;

! RTA distal joint force power
 ! rate of energy flow from humerus to RTA via the joint force
 ! at the shoulder (left) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LAR::ProxEndForce,KINETIC_KINEMATIC::LAR::ProxEndVel)
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/RESULT_NAME=RTA_DIST_L_JFP
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;

! RTA distal joint force power
 ! rate of energy flow from humerus to RTA via the joint force
 ! at the shoulder (left) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RAR::ProxEndForce,KINETIC_KINEMATIC::RAR::ProxEndVel)
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/RESULT_NAME=RTA_DIST_R_JFP
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;

! RTA proximal segment torque power
 ! rate of energy flow from RPVis to RTA via the joint torque
 ! at the RPVis/RTA junction (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RTA::ProxEndTorque,KINETIC_KINEMATIC::RTA::AngVel)
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/RESULT_NAME=RTA_PROX_STP
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;

! RTA distal segment torque power
 ! rate of energy flow from humerus to RTA via the joint torque
 ! at the shoulder (left) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::LAR::ProxEndTorque,KINETIC_KINEMATIC::RTA::AngVel)
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/RESULT_NAME=RTA_DIST_L_STP
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;

! RTA distal segment torque power
 ! rate of energy flow from humerus to RTA via the joint torque
 ! at the shoulder (right) (Watts)
Evaluate_Expression
/EXPRESSION=dot(-1*KINETIC_KINEMATIC::RAR::ProxEndTorque,KINETIC_KINEMATIC::RTA::AngVel)
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/RESULT_NAME=RTA_DIST_R_STP
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;

! RTA proximal segment power
 ! net rate of energy flow from RPVis to RTA at the RPVis/RTA junction (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTA_PROX_JFP+DERIVED::PROCESSED::RTA_PROX_STP
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/RESULT_NAME=RTA_PROX_SP
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;

! RTA distal segment power
 ! net rate of energy flow from humerus to RTA at the shoulder (left) (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTA_DIST_L_JFP+DERIVED::PROCESSED::RTA_DIST_L_STP
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/RESULT_NAME=RTA_DIST_L_SP
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;

! RTA distal segment power
 ! net rate of energy flow from humerus to RTA at the shoulder (right) (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTA_DIST_R_JFP+DERIVED::PROCESSED::RTA_DIST_R_STP
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/RESULT_NAME=RTA_DIST_R_SP
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;

! RTA segment power
 ! net rate of energy flow to/from the RTA (Watts)
Evaluate_Expression
/EXPRESSION=DERIVED::PROCESSED::RTA_PROX_SP+DERIVED::PROCESSED::RTA_DIST_L_SP+DERIVED::PROCESSED::RTA_DIST_R_SP
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/RESULT_NAME=RTA_NET_SP
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=SEGMENTS
/PARAMETER_VALUE=LAR+LFA+LFT+LHA+LSK+LTH+RAR+RFA+RFT+RHA+RHE+RPV+RSK+RTA+RTH
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! /MULTI_PASS=FALSE
;

For_Each
/ITERATION_PARAMETER_NAME=INDEX
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/ITEMS=::SEGMENTS
;

Compute_Model_Based_Data
/RESULT_NAME=&::INDEX&_ROTMAT
/FUNCTION=JOINT_ROTATION
/SEGMENT=::INDEX
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/RESOLUTION_COORDINATE_SYSTEM=LAB
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=INDEX_FORCES
/PARAMETER_VALUE=::INDEX
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/PARAMETER_VALUE_APPEND=__ProxEndForce
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=INDEX_FORCES
/PARAMETER_VALUE=::INDEX_FORCES
/PARAMETER_VALUE_SEARCH_FOR=_
/PARAMETER_VALUE_REPLACE_WITH=:
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=INDEX_TORQUES
/PARAMETER_VALUE=::INDEX_FORCES
/PARAMETER_VALUE_SEARCH_FOR=Force
/PARAMETER_VALUE_REPLACE_WITH=Torque
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;

Evaluate_Expression
/EXPRESSION=KINETIC_KINEMATIC::&::INDEX_FORCES&
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=GLOBAL_JOINT_FORCES
/RESULT_NAME=::INDEX
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;

Evaluate_Expression
/EXPRESSION=KINETIC_KINEMATIC::&::INDEX_TORQUES&
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=GLOBAL_JOINT_TORQUES
/RESULT_NAME=::INDEX
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;

Select_Active_File
  /FILE_NAME=*&::INDEX
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;

END_FOR_EACH
/ITERATION_PARAMETER_NAME=INDEX
;

For_Each
/ITERATION_PARAMETER_NAME=INDEX
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/ITEMS=::SEGMENTS
;

!Prompt for the folder
Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=FOLDER
/PARAMETER_VALUE=
;

! Get the list of files from the workspace and do not retain the path name for each file
Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=ALL_FILES
! /GET_CURRENT_SELECTED_FILES=FALSE
/USE_SHORT_FILENAMES=TRUE
;

! Loop through the files and export the data
For_Each
/ITERATION_PARAMETER_NAME=INDEX
/ITEMS=::FILES
;

Select_Active_File
  /FILE_NAME=*&::INDEX
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;

Export_Data_To_Ascii_File
/FILE_NAME=::FOLDER&::INDEX&.txt
/SIGNAL_TYPES=FRAME_NUMBERS+FRAME_NUMBERS+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+KINETIC_KINEMATIC+LANDMARK+LANDMARK+FORCE+FORCE+COFP+COFP+FREEMOMENT+FREEMOMENT+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC+KINETIC_KINEMATIC
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+Model+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+RFA+LFA+RHA+LHA
/SIGNAL_NAMES=FRAMES+TIME+LAR_ROTMAT+LT_ANKLE_ANGLE+LT_ANKLE_FORCE+LT_ANKLE_MMT+LT_ANKLE_VIRTUAL_LAB_ANGLE+LT_ELBOW_ANGLE+LT_ELBOW_ANGULAR_VELOCITY+LT_ELBOW_FORCE+LT_ELBOW_MMT+LT_HIP_ANGLE+LT_HIP_ANGULAR_VELOCITY+LT_HIP_LTH_FORCE+LT_HIP_LTH_MMT+LT_HIP_RPV_FORCE+LT_HIP_RPV_MMT+LT_KNEE_ANGLE+LT_KNEE_ANGULAR_VELOCITY+LT_KNEE_FORCE+LT_KNEE_MMT+LT_SHOULDER_ANGLE+LT_SHOULDER_ANGULAR_VELOCITY+LT_SHOULDER_LAR_FORCE+LT_SHOULDER_LAR_MMT+LT_SHOULDER_RTA_FORCE+LT_SHOULDER_RTA_MMT+LT_WRIST_ANGLE+LT_WRIST_ANGULAR_VELOCITY+LT_WRIST_FORCE+LT_WRIST_MMT+PELVIS_ANGLE+RT_ANKLE_ANGLE+RT_ANKLE_FORCE+RT_ANKLE_MMT+RT_ANKLE_VIRTUAL_LAB_ANGLE+RT_ELBOW_ANGLE+RT_ELBOW_ANGULAR_VELOCITY+RT_ELBOW_FORCE+RT_ELBOW_MMT+RT_HIP_ANGLE+RT_HIP_ANGULAR_VELOCITY+RT_HIP_RPV_FORCE+RT_HIP_RPV_MMT+RT_HIP_RTH_FORCE+RT_HIP_RTH_MMT+RT_KNEE_ANGLE+RT_KNEE_ANGULAR_VELOCITY+RT_KNEE_FORCE+RT_KNEE_MMT+RT_SHOULDER_ANGLE+RT_SHOULDER_ANGULAR_VELOCITY+RT_SHOULDER_RAR_FORCE+RT_SHOULDER_RAR_MMT+RT_SHOULDER_RTA_FORCE+RT_SHOULDER_RTA_MMT+RT_WRIST_ANGLE+RT_WRIST_ANGULAR_VELOCITY+RT_WRIST_FORCE+RT_WRIST_MMT+TORSO_ANGLE+TORSO_PELVIS_ANGLE+TORSO_PELVIS_ANGULAR_VELOCITY+CenterOfMass+L_HEEL+R_HEEL+FP1+FP2+FP1+FP2+FP1+FP2+ProxEndPos+ProxEndPos+ProxEndPos+ProxEndPos
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/COMPONENT_SEQUENCE=X, X, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, ALL, Z, Z, ALL, ALL, ALL, ALL
/SIGNAL_PRECISION=5
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

End_For_Each
/ITERATION_PARAMETER_NAME=INDEX
;

